velocity11 Form_Data 1.0
MainContainer
  OperatorConsoleStatic Display string: Mag-Net Plasma Preparation (96LT head)
  OperatorConsoleStatic Display string: version 1.0 -- August 2026
  OperatorConsoleGroup
    Group name: Input parameters
    OperatorConsoleStatic Display string: Number of rows
    OperatorConsoleDroplist
      JavaScript variable: nRows
      Items: 1;2;3;4;5;6;7;8
      Default value: 8
    OperatorConsoleStatic Display string: Number of columns
    OperatorConsoleDroplist
      JavaScript variable: nCols
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 2
    OperatorConsoleStatic Display string: Time on magnet (sec)
    OperatorConsoleTextBox
      JavaScript variable: timeMagnet
      Default value: 20
    OperatorConsoleStatic Display string: Starting volume
    OperatorConsoleTextBox
      JavaScript variable: volStart
      Min. value: 0
      Default value: 20
    OperatorConsoleImage
      JavaScript variable: image3
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doEtOH
      Default value: 0
      Caption: Add Binding Buffer
    OperatorConsoleStatic Display string: Volume of Binding Buffer
    OperatorConsoleTextBox
      JavaScript variable: volEtOH
      Mandatory: 1
      Min. value: 0
      Max. value: 100
      Default value: 100
    OperatorConsoleImage JavaScript variable: imagea2
    OperatorConsoleCheckbox
      JavaScript variable: doBeads
      Default value: 0
      Caption: Add beads
      Value: 1
    OperatorConsoleStatic Display string: Volume of Beads
    OperatorConsoleTextBox
      JavaScript variable: volBeads
      Mandatory: 1
      Min. value: 0
      Default value: 4
    OperatorConsoleImage JavaScript variable: imagea3
    OperatorConsoleCheckbox
      JavaScript variable: doFlowT
      Default value: 0
      Caption: Perform Flow Through Collection
    ResetDataEntryValues Caption: Default values
    SaveDataEntryValues Caption: Save values
    OperatorConsoleButton
      JavaScript variable: volumesCalculatedOK
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formVolFuncs.js")
        open(scriptsPath + "alert.js")

        volumesCalculatedOK = formCalcVols()
        if (volumesCalculatedOK) {
           formInfo = "No errors found in volumes with current settings"
        }
        else {
           alert()
        }

        print("volumesCalculatedOK = " + volumesCalculatedOK)
      Caption: Calculate volumes
  TimeElapsed
    Text: Elapsed Time: 00:00:00
    Value: 00:21:13
  OverallProgress Value: 88
  OperatorConsoleGroup
    Group name: Processes
    OperatorConsoleStatic Display string: process in progress
    OperatorConsoleStatic Display string: process complete
    OperatorConsoleStatic Display string: process not started
  OperatorConsoleGroup
    Group name: Tips
    OperatorConsoleStatic Display string: Clean tips (C)
    OperatorConsoleStatic Display string: Empty column (E)
    OperatorConsoleStatic Display string: Used tips (U)
  OperatorConsoleStatic Display string: Empty
  OperatorConsoleStatic Display string: 250 uL tips (see below for more)
  OperatorConsoleStatic Display string: 250 uL tips (full box - see below)
  OperatorConsoleStatic
    JavaScript variable: layoutLoc4
    Value: Heating Plate
  OperatorConsoleStatic
    JavaScript variable: layoutLoc5
    Value: Beads and Trypsin
  OperatorConsoleStatic Display string: Reagents
  OperatorConsoleStatic Display string: Waste
  OperatorConsoleStatic
    Text: Magnet
    JavaScript variable: layoutLoc8
    Value: Sample Plate
  OperatorConsoleStatic
    JavaScript variable: layoutLoc9
    Value: Empty
  OperatorConsoleTextBox
    JavaScript variable: formInfo
    Read only: 1
    Default value: SP3 protocol
    Value: Replace tips and set tips status
  OperatorConsoleButton
    Script:
      // set head and version
      protocolVersion = "0.1"
      formHeadType = "96LT"

      print("formFilePath = " + formFilePath)
      // find the last-but-one slash in the formFilePath
      rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
      scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
      protocolPath = formFilePath.slice(0,rootSlashIndex) + "/Protocols/"

      // Removed 1.0RC -- there is not form name anymore in formFilePath, only path.
      //formName = formFilePath.substring(formFilePath.lastIndexOf("/")+1)

      // building formName from the parameters above
      formName = "Plasma_Preparation_v_" + protocolVersion +"_"+formHeadType+".VWForm"
      print("formName = " + formName)

      print("scriptsPath = " + scriptsPath)

      open(scriptsPath + "alert.js")
      open(scriptsPath + "beadsPlateColsCheck.js")

      // labware data retrieval just in case
      open(scriptsPath + "getPlateData.js")
      print("labwareDataRetrievedOK = " + labwareDataRetrievedOK)

      // run this again just in case
      open(scriptsPath + "formVolFuncs.js")
      volumesCalculatedOK = formCalcVols()
      print("volumesCalculatedOK = " + volumesCalculatedOK)

      // if this variables does not exist, set it to false
      labwareDataRetrievedOK = labwareDataRetrievedOK || false

      if (volumesCalculatedOK) {
         formInfo = "Errors found when calculating volumes. Can't proceed."
         alert()
      }
      else if (!labwareDataRetrievedOK) {
         formInfo = "Error found when retrieving labware data. Can't proceed."
         alert()
      }
      else if (!beadsPlateColsCheck()) {
         formInfo = "Duplicate columns in bead plate. Can't proceed."
         alert()
      }
      else if (! (statusColsString = statusColsString || false)) {
         formInfo = "Tips status not set. Can't proceed."
         alert()
      }
      else {
         protFilePath = protocolPath + "Plasma_Preparation_"+formHeadType+"_v_"+protocolVersion+".pro"
         formInfo = "Starting " + protFilePath
         tipsStatusChangeEnabled = false
         runset.clear()
         runset.appendProtocolFileToRunset(protFilePath, 1, "", formName)
         print("Running " + protFilePath + " using form " + formName)
      }
    Caption: Check values and Run SP3
  PauseResume Caption: Pause protocol
  ToggleFullScreen Caption: Full screen
  OperatorConsoleCheckbox
    JavaScript variable: testMode
    Default value: 0
    Caption: Test mode
  OperatorConsoleStatic Display string: Form root path:
  OperatorConsoleTextBox
    JavaScript variable: formFilePath
    Default value: C:/VWorks Workspace/Plasma_Preparation/Forms/Plasma_Preparation_v_0.1_96LT.VWForm
  OperatorConsoleGroup
    Group name: Tip box location 2
    OperatorConsoleImage
      JavaScript variable: iCol1
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\yellowball.png
    OperatorConsoleImage
      JavaScript variable: iCol2
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol3
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol4
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol5
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol6
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol7
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol8
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol9
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol10
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol11
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\yellowball.png
    OperatorConsoleImage
      JavaScript variable: iCol12
      Value: C:\VWorks Workspace\Plasma_Preparation\Forms\redball.png
    OperatorConsoleDroplist
      JavaScript variable: sCol1
      Items: C;E;U;
      Default value: C
      Value: E
    OperatorConsoleDroplist
      JavaScript variable: sCol2
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol3
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol4
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol5
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol6
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol7
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol8
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol9
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol10
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol11
      Items: C;E;U;
      Default value: E
    OperatorConsoleDroplist
      JavaScript variable: sCol12
      Items: C;E;U;
      Default value: E
      Value: U
    OperatorConsoleStatic Display string: Enable tips status change
    OperatorConsoleCheckbox
      JavaScript variable: tipsStatusChangeEnabled
      Default value: 0
      Value: 1
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = "C,C,C,C,C,C,C,C,C,C,E,E"
           colsFormUpdate2()
        }
        else {
           formInfo = "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Set default
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = [sCol1,sCol2,sCol3,sCol4,sCol5,sCol6,sCol7,sCol8,sCol9,sCol10,sCol11,sCol12].join(",")
           colsFormUpdate2()
        }
        else {
           formInfo = "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Store status
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = "E,E,E,E,E,E,E,E,E,E,E,E"
           colsFormUpdate2()
        }
        else {
           formInfo =  "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Reset all
    OperatorConsoleStatic Display string: 10 cols clean 2 cols empty
    OperatorConsoleStatic Display string: All empty
  OperatorConsoleGroup
    Group name: Reagents plate location 6 (per col)
    OperatorConsoleStatic Display string: Col 1
    OperatorConsoleTextBox
      JavaScript variable: reagVolEtOH1
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of Binding Buffer
    OperatorConsoleStatic Display string: Col 2
    OperatorConsoleTextBox
      JavaScript variable: reagVolAcN2
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: Col 3
    OperatorConsoleTextBox
      JavaScript variable: reagVolAcN
      Read only: 1
    OperatorConsoleStatic Display string: Col 4
    OperatorConsoleTextBox
      JavaScript variable: reagVolABC
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: Col 5
    OperatorConsoleTextBox JavaScript variable: reagVolTFA
    OperatorConsoleStatic Display string: Col 6
    OperatorConsoleTextBox JavaScript variable: reagVolTFA1
  OperatorConsoleGroup
    Group name: Beads plate location 5 (per well)
    OperatorConsoleStatic Display string: Column
    OperatorConsoleDroplist
      JavaScript variable: colBeads
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 3
    OperatorConsoleTextBox
      JavaScript variable: reagVolBeads
      Read only: 1
      Value: 13.8
    OperatorConsoleStatic Display string: uL of beads solution
  OperatorConsoleGroup
    Group name: Load / Save method
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = deleteMethod(rootPath,myMethod,confirmDelete)
        formInfo = tmp.info
        if (!tmp.status) alert()

        // resetting confirmDelete
        confirmDelete = false
      Caption: Delete method
    OperatorConsoleCheckbox
      JavaScript variable: confirmDelete
      Default value: 0
    OperatorConsoleDroplist
      JavaScript variable: myMethod
      Items: =methodsList
      Value: 20210720 Test v0.1.js
      Item selections variable: 20210720 Test v0.1.js;20210721 MEFs 20ug-50ug -- post-digestion.js;20210721 MEFs 20ug-50ug .js;SG_20220928_VPS35digest.js;
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        methodsList = listMethods(rootPath)
        print("methodsList = " + methodsList)
      Caption: List methods
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = loadMethod(rootPath,myMethod)
        formInfo = tmp.info
        if (!tmp.status) alert()

        // retrieve the parameters for the labware set in the method
        open(scriptsPath + "plateInfo.js")
        open(scriptsPath + "getPlateData.js")

        // now check the volumes against the imported parameters
        open(scriptsPath + "formVolFuncs.js")
        volumesCalculatedOK = formCalcVols()
        if (volumesCalculatedOK) {
           formInfo = "No errors found in volumes with current settings"
        }
        else {
           alert()
        }

        // now set the tips selector into the dots
        // and create the status string for the tips
        // open(scriptsPath + "formTipsFuncs.js")
        // tipsStatusChangeEnabled = true
        // statusColsString = [sCol1,sCol2,sCol3,sCol4,sCol5,sCol6,sCol7,sCol8,sCol9,sCol10,sCol11,sCol12].join(",")
        // colsFormUpdate2()
        // tipsStatusChangeEnabled = false
      Caption: Load method
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = saveMethod(rootPath,myMethod2,overwriteMethod)
        formInfo = tmp.info
        if (!tmp.status) alert()
      Caption: Save method
    OperatorConsoleTextBox JavaScript variable: myMethod2
    OperatorConsoleCheckbox
      JavaScript variable: overwriteMethod
      Default value: 0
      Caption: Overwrite method
  OperatorConsoleGroup
    Group name: Labware
    OperatorConsoleStatic Display string: labware DB max vol (uL)
    OperatorConsoleStatic Display string: vol refers to
    OperatorConsoleStatic Display string: max volume per well (uL)
    OperatorConsoleStatic Display string: Sample Labware
    OperatorConsoleDroplist
      JavaScript variable: sampleLabware
      Items: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      Read only: 1
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: sampleMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: sampleMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: sampleMaxVol
      Read only: 1
      Value: 210
    OperatorConsoleStatic Display string: Beads Plate Labware
    OperatorConsoleDroplist
      JavaScript variable: beadsLabware
      Items: 96 SuperPlate PCR Plate AB2800;96 Eppendorf 30129300, PCR, Full Skirt, PolyPro;96 Sarstedt Protein Low Bind PCR Plate, low profile, skirted;
      Read only: 1
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: beadsMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: beadsMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: beadsMaxVol
      Read only: 1
      Value: 210
    OperatorConsoleStatic Display string: Plasma Plate
    OperatorConsoleDroplist
      JavaScript variable: plasmaLabware
      Items: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro; 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);;12 Column Reservoir (SP3 waste);
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      Item selections variable: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro; 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);12 Column Reservoir (SP3 waste);
    OperatorConsoleTextBox
      JavaScript variable: plasmaMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: plasmaMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: plasmaMaxVol
      Read only: 1
      Value: 210
    OperatorConsoleStatic Display string: Waste Labware
    OperatorConsoleDroplist
      JavaScript variable: wasteLabware
      Items: 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);;12 Column Reservoir (SP3 waste);
      Read only: 1
      Default value: 96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom
      Item selections variable: 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);12 Column Reservoir (SP3 waste);
    OperatorConsoleStatic Display string: Tip Touch:
    OperatorConsoleDroplist
      JavaScript variable: wasteTTForm
      Items: S/N;W/E
      Read only: 1
      Default value: W/E
    OperatorConsoleTextBox
      JavaScript variable: wasteMaxVolDB
      Read only: 1
      Value: 1000
    OperatorConsoleDroplist
      JavaScript variable: wasteMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: wasteMaxVol
      Read only: 1
      Value: 1000
    OperatorConsoleStatic Display string: Reagents Labware
    OperatorConsoleDroplist
      JavaScript variable: reagentsLabware
      Items: Reservoir 6 cols Agilent 201284-100 (SP3 reagents);96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;
      Read only: 1
      Default value: Reservoir 6 cols Agilent 201284-100 (SP3 reagents)
    OperatorConsoleTextBox
      JavaScript variable: reagentsMaxVolDB
      Read only: 1
      Value: 47000
    OperatorConsoleDroplist
      JavaScript variable: reagentsMaxVolRef
      Items: column;well;
      Read only: 1
      Value: column
    OperatorConsoleTextBox
      JavaScript variable: reagentsMaxVol
      Read only: 1
      Value: 5875
    OperatorConsoleStatic Display string: Collection Plate Labware
    OperatorConsoleDroplist
      JavaScript variable: destinationLabware
      Items: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      Read only: 1
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: destinationMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: destinationMaxVolRef
      Items: well
      Read only: 1
    OperatorConsoleTextBox
      JavaScript variable: destinationMaxVol
      Value: 210
    OperatorConsoleButton
      JavaScript variable: labwareDataRetrievedOK
      Script:
        //print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        //rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = "C:/VWorks Workspace/Mag-Net/Scripts/" //formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)

        open(scriptsPath + "plateInfo.js")
        open(scriptsPath + "getPlateData.js")

        print("labwareDataRetrievedOK = " + labwareDataRetrievedOK)
      Caption: Retrieve data from the labware DB and calculate max volume
    OperatorConsoleStatic Display string: Tips on location 2
    OperatorConsoleRadioButton
      JavaScript variable: tips3unfiltered
      Default value: 1
      Caption: Unfiltered
      Group ID: tips3box
    OperatorConsoleRadioButton
      JavaScript variable: tips3filtered
      Default value: 0
      Caption: Filtered
      Group ID: tips3box
    OperatorConsoleStatic Display string: Tips on location 3
    OperatorConsoleRadioButton
      JavaScript variable: tips6unfiltered
      Default value: 1
      Caption: Unfiltered
      Group ID: tips6box
    OperatorConsoleRadioButton
      JavaScript variable: tips6filtered
      Default value: 0
      Caption: Filtered
      Group ID: tips6box
