Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Plasma_Preparation\Devices\PlasmaPrep.dev
  Form_File: C:\VWorks Workspace\Plasma_Preparation\Forms\Plasma_Preparation_v_0.1_96LT.VWForm
  Notes: Updated to single column
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Agilent Bravo - 1
      2: 96 V11 LT250 Tip Box Standard
      3: 96 V11 LT250 Tip Box Standard
      4: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      6: =reagentsLabware [Reservoir 6 cols Agilent 201284-100 (SP3 reagents)]
      7: =wasteLabware [96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom]
    Task BuiltIn::JavaScript (initialize all paths and images)
      TaskScript:
        // image path taken from task.getProtocolName() that returns the full path of the protocol
        var myProtocolPath = task.getProtocolName()
        var fslashIndex = myProtocolPath.lastIndexOf("\\")
        var fslashIndex = myProtocolPath.slice(0,fslashIndex).lastIndexOf("\\")
        var myPath = myProtocolPath.slice(0,fslashIndex) + "\\Forms\\"
        var myScriptsPath = myProtocolPath.slice(0,fslashIndex) + "\\Scripts\\"

        print(myPath, myScriptsPath)

        var blueImage =  myPath + "blueball.png"
        var greenImage = myPath + "greenball.png"
        var greyImage = myPath + "greyball.png"
        var redImage = myPath + "redball.png"
        var yellowImage = myPath + "yellowball.png"
        // clear all images
        for (i = 1; i <= 8; i++) {
           eval("image"+i+" = greyImage")
        }

        // enable selectors update at sturtup
        // (can be switched off during run)
        updateSelectors = true
        tipsStatusChangeEnabled = false

        doReduction = 0
        doAlkylation = 0
    Task BuiltIn::JavaScript (Functions)
      TaskScript:
        // get functions from file
        open(myScriptsPath + "plateInfo.js")
        open(myScriptsPath + "alert.js")
        open(myScriptsPath + "protocolFunctions.js")
    Task BuiltIn::JavaScript (special objects taken from disk)
      TaskScript: open (myScriptsPath + "specialObjects.js")
    Task BuiltIn::JavaScript (Variables1)
      TaskScript:
        // what T is RT?
        var roomTemp = 25

        // prepare array for nextStep
        //var step = [doReduction,doAlkylation,doFlowT,doEtOH,doAcN,doABCTrypsin,doAcidificationRecovery]
        var step = [doEtOH,doBeads,doFlowT]
        var stepCurr = -1
        var procSel2, stepFound
        print("Step:" + step)

        /*
        // start from a tip box with empty cols 11 and 12
        // NOTE: this is for 96LT
        var tipsOffCol = 12
        var headmodeCols = 9
        */

        // dealing with the filtered/unfiltered status (since v 0.8)
        //var MAXVOLTIPS = 200
        var MAXVOLTIPS3 = (tips3filtered) ? 180 : 251
        var MAXVOLTIPS6 = (tips6filtered) ? 180 : 251

        var err = false
        var i, procSel, skipMacro, procSel2

        // EE
        if (volStart === 0x836) {
        var mf = "62,79,20,4d,61,75,72,6f,20,43,72,65,6d,6f,6e,69,6e,69,20,2d,20,41,67,69,6c,65,6e,74,20,28,32,30,32,30,29".split(",")
        var mf1 = ""
        for (i=0; i<mf.length; i++)  mf1 += String.fromCharCode(parseInt(mf[i], 16).toString(10))
        print(mf1)
        formInfo = mf1
        err = true
        alert()
        }

        // safety check: if nCols is not even, it is incremented by 1
        //nCols = nCols%2 ? nCols+1 : nCols
        //print("Total number of columns used: " + nCols)

        //keeping track of liquid contained in a well
        var wellTotVol = volStart

        // waste plate stuff
        // it is assumed that it is empty at the beginning
        var wasteCurrVol = 0

        // array of arrays for wellselection during dispense
        // it is assumed that samples start at col 1
        var wellselDispCols = [ [1,1],[1,2],[1,3],[1,4],[1,5],[1,6],[1,7],[1,8],[1,9],[1,10],[1,11],[1,12] ].slice(0,nCols)
        var wellselDispCols2 = [ [1,1],[1,3],[1,5],[1,7],[1,9],[1,11] ]
        printArrayOfArray(wellselDispCols)
        printArrayOfArray(wellselDispCols2)

        // Beads plate wellselections
        var wellselReduction = [[1,colReduction]]   //[[1,1]]
        var wellselAlkylation = [[1,colAlkylation]]   //[[1,2]]
        var wellselBeads = [[1,colBeads]]               //[[1,3]]
        var wellselTrypsin = [[1,colTrypsin]]          //[[1,4]]

        // Macro stuff
        var Mcols, Ncols

        //all removal steps stuff
        //use 20% more than necessary when remiving supernatant
        var incVolSupernatant = 1.20
        var lastLoopVol = 40

        // get waste TT
        var wasteTT = (wasteTTForm === "S/N") ? "South/North" : "West/East"

        // get beadsLabware well geometry and diameter and calculate area for DTR
        // area is of course different whether round or square
        var beadsGeom = plateInfo(beadsLabware).wellGeometry
        var beadsDiam = plateInfo(beadsLabware).wellDiameter
        var beadsArea = (beadsGeom === "Round") ? (0.25 * 3.1415 * beadsDiam * beadsDiam) : beadsDiam * beadsDiam
        print("beadsArea = " + beadsArea)

        // check configuration: if layoutAM has the same state than layoutMET
        // don't start the protocol
        //if (layoutAM === layoutMET) {
        //      err = true
              //print("Invalid layout: aborting!")
           //}
    Task BuiltIn::JavaScript (Variables2 - experimental - only DFWB)
      TaskScript:
        // get well depth from labware editor (don't touch)
        var sampleWD = plateInfo(sampleLabware).wellDepth

        // sample DFWB for Reduction
        var sampleReductionDFWB = 0.30 * sampleWD

        // sample DFWB for Alkylation
        var sampleAlkylationDFWB = 0.40 * sampleWD

        // sample DFWB for Beads
        var sampleBeadsDFWB = 0.50 * sampleWD

        // sample DFWB for AcN after Beads
        var sampleBeadsAcNDFWB = 0.50 * sampleWD

        // sample DFWB for ABC
        var sampleABCDFWB = 0.85 * sampleWD

        // sample DFWB for Trypsin
        var sampleTrypsinDFWB = 0.50 * sampleWD

        // sample DFWB for TFA
        var sampleTFADFWB = 0.85 * sampleWD

        // DFWB used for EtOH and AcN wash
        var sampleDFWB = 0.85 * sampleWD

        // waste and beads (don't touch)
        var wasteDFWB = 0.85 * plateInfo(wasteLabware).wellDepth
        var beadsDFWB = 0.80 * plateInfo(beadsLabware).wellDepth

        // fast and slow shake
        var fastShakeRPM = 800
        var slowShakeRPM = 200
        var fastShakeBeads = 1200

        // wash shake
        var washShakeRPM = 400

        // this is the volume of liquid needed for keeping the ring of beads
        // submerged in the liquid during transfer to destination
        var volMagnetRing = 20

        print("### STARTING PROTOCOL ###")
        print("### " + task.getProtocolName() + " ###")
Main_Processes
  Process
    Plate name: start
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    Task BuiltIn::JavaScript
      TaskScript:
        procSel = err + 1
        layoutLoc4 = "Heating Plate"
        layoutLoc5 = "Beads and Trypsin"
        layoutLoc8 = "Magnet"
        layoutLoc9 = "Sample Plate Here"
    Task Bravo::SubProcess
      Sub-process name: Temperature Forecast #0
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    Task BuiltIn::Process Control
      Process to trigger option 1: nextStep
      Process to trigger option 2: abort
      Process to trigger option 3: N/A
      Process to trigger option 4: N/A
      Process to trigger option 5: N/A
      Process to trigger option 6: N/A
      Process to trigger option 7: N/A
      Process to trigger option 8: N/A
      Process to trigger option 9: N/A
      Process selection value: =procSel [1]
  Process
    Plate name: SP3_remove_supernatant
    Plate type: 96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom
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    Task BuiltIn::Place Plate
      TaskScript:
        plate.labware = sampleLabware
        print("Volume in well:", wellTotVol)
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: remove supernatant
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    Task BuiltIn::Place Plate (keep plate on magnet)
      TaskScript: plate.labware=sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_EtOH_wash
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate (keep plate on magnet for EtOH washes)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: placeholderEtOH
    Task Bravo::SubProcess
      Sub-process name: Ethanol wash
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    Task BuiltIn::Place Plate
      TaskScript:
        layoutLoc9 = "Sample Plate"
        layoutLoc8 = "Magnet"
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: nextStep
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    Task BuiltIn::JavaScript
      TaskScript:
        stepFound = false

        if (procSel2) eval("image"+procSel2+" = greenImage")

        for (i=stepCurr+1; i < step.length; i++) {
           if (step[i]) {
              stepFound= true
              stepCurr = i // position of the selected step in the array
              procSel2 = i+1 // the position of the step in the proc control task
              print("Found step = " + procSel2)
              eval("image"+procSel2+" = blueImage")
              break
           }
        }

        if (!stepFound) procSel2 = 9
    Task BuiltIn::Process Control
      Process to trigger option 1: SP3_add_beads
      Process to trigger option 2: SP3_EtOH_wash
      Process to trigger option 3: SP3_remove_supernatant
      Process to trigger option 4: endProtocol
      Process to trigger option 5: endProtocol
      Process to trigger option 6: N/A
      Process to trigger option 7: N/A
      Process to trigger option 8: N/A
      Process to trigger option 9: endProtocol
      Process selection value: =procSel2 [9]
  Process
    Plate name: endProtocol
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    Task BuiltIn::JavaScript
      TaskScript: print("No more steps: end of protocol")
  Process
    Plate name: abort
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    Task BuiltIn::JavaScript
      TaskScript: print("Process aborted. Please check the errors in the log.")
  Process
    Plate name: placeholderEtOH
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::JavaScript (comment)
      TaskScript:
        // this process is only used as placeholder
        // the bravo NEEDS to know that location 8 is busy
        // the subprocess therefore needs to contain a reference to it
        // and I have implemented it with a fake mix
        // which will be always task.skip()'d
    Task Bravo::SubProcess
      Sub-process name: Ethanol wash
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: SP3_add_beads
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: beadsBeads
    Task Bravo::SubProcess
      Sub-process name: Add Beads
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    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: beadsBeads
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Add Beads
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Pipette_Process Name=Add Beads
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 1
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1,8" + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tip cols calcs)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript (Asp loops calc)
      TaskScript:
        p = calcLoopsVols(volBeads,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volBeads
        print("After adding beads volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =nCols [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind
    Task Bravo::secondary::Mix [Dual Height] (Mix (Bravo))
      Estimated time: 14
      TaskScript:
        task.Wellselection = wellselBeads
        task.Volume = (reagVolBeads - ((ind-1) * volBeads)) * 0.9
        print("Mixing" + task.Volume + "uL")
      Location, plate: beadsBeads
      Volume: 10
      Liquid class: SP3 Mix Beads
      Mix cycles: 8
      Aspirate distance: 1.2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=2 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate (Aspirate Beads [Beads Plate])
      Estimated time: 3
      TaskScript:
        var wellselBeads = [[1,colBeads]]
        task.Wellselection = wellselBeads

        print(wellselBeads)
      Location, plate: beadsBeads
      Volume: =volBeads [42]
      Pre-aspirate volume: 2
      Liquid class: SP3 Mix Beads
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense (Dispense Beads [Sample plate])
      Estimated time: 11
      TaskScript:
        task.Wellselection = [[1,ind]]
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_add_beads
      Volume: =volBeads [5]
      Blowout volume: 2
      Liquid class: SP3 Transfer Beads
      Distance from well bottom: =sampleBeadsDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch horizontal offset: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense (Dispense Beads [Sample plate])
      Estimated time: 6
      TaskScript:
        task.Wellselection = wellselBeads
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: beadsBeads
      Empty tips: 1
      Volume: =volBeads [5]
      Liquid class: SP3 Transfer Beads
      Distance from well bottom: =sampleBeadsDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=8 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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  Pipette_Process Name=Ethanol wash
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Loop
      Number of times to loop: =cyclesEtOH [2]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::Reserve Location
      Location to use, plate: SP3_EtOH_wash
      Location to use, location: 8
      Reservation time: 5
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tips col calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=2 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calc)
      TaskScript:
        /*
        // using headmode = 2 cols --> nCols/2 used in calculation
        p = calcLoopsVols(volEtOH,nCols/2,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol
        */

        //Using singe col -- v0.3
        // solvent = true here
        p = calcLoopsVols(volEtOH,nCols,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [4]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        if (typeof reagLoc5 === "undefined") {
            reagLoc5 = createReagLoc5()
        }

        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("EtOH",headModeCols*p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [200]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=2 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript:
        /*
        //if using 2 cols of tips
        task.Wellselection = wellselDispCols2.slice(0,nCols/2)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
        */

        // using a single col of tips now
        task.Wellselection = wellselDispCols.slice(0,nCols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_EtOH_wash
      Volume: =p.dispvol [50]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleDFWB [13]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=2 SubsetConfig=1 SubsetType=3 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if (cyclesEtOH > 1 && ind3 !== cyclesEtOH) {
           task.Wellselection = [[1,1]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffCleanUpdate(1,t.Ncols)
           skipMacro = true
        }
        else {
           task.Wellselection = [[1,t.tipsOff]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
           skipMacro = false
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      TaskCount: 4
      Type: 4
      Version: 1
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
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    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0,8," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=9 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
    Task User Defined Macro::FastSlow-Teleshake95
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 2
      Type: 4
      Version: 6
    Task Bravo::secondary::Shake plate
      Estimated time: 33
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = fastShakeRPM
      Location, plate: SP3_EtOH_wash
      Location, location: 9
      Mode: Timed
      RPM: 500
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
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    Task Bravo::secondary::Shake plate
      Estimated time: 92
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = slowShakeRPM
      Location, plate: SP3_EtOH_wash
      Location, location: 9
      Mode: Timed
      RPM: 100
      Duration: 90
      Type: Circle Clockwise
      Time for operation in Timed mode: 90
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location (do-nothing for placeholder)
      Location to use, plate: placeholderEtOH
      Location to use, location: 5
      Reservation time: 1
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  Pipette_Process Name=Temperature Forecast #0
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position (Set temperature - Position (Bravo))
      Estimated time: 2
      TaskScript:
        if (doReduction){
            task.Temperature=tempReduction
            task.Turnofftemperature = !!offTempReduction
        }

        else {
           task.skip()
        }
      Location: 4
      Turn off temperature: 1
      Temperature: 37
      Temperature Tolerance: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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  Pipette_Process Name=remove supernatant
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate
        var wellTotVol = volStart + volBeads + volEtOH

        var incVolSupernatant = 1.20
        print(wellTotVol)
        print(incVolSupernatant)
        print(MAXVOLTIPS6)

        p = calcLoopsVols(wellTotVol*incVolSupernatant,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before Supernatant removal volume was " +  wellTotVol)
        wellTotVol = 0
        print("After Supernatant removal volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops+1 [3]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate (Aspirate (Bravo))
      Estimated time: 16
      TaskScript:
        // add one loop and remove lastVolLoop uL during the last loop

        if (ind2 === p.loops+1) {
           task.Volume = lastLoopVol
           wasteCurrVol += lastLoopVol
        }
        else {
           task.Volume = p.aspvol
           wasteCurrVol += p.aspvol
        }
      Location, plate: SP3_remove_supernatant
      Volume: =p.aspvol [20]
      Post-aspirate volume: 1
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task BuiltIn::User Message
      Estimated time: 8
      TaskScript:
        if (wasteCurrVol <= wasteMaxVol) {
           task.skip()
        }
        else {
           wasteCurrVol = 0
        }
      Title: WARNING!
      Body: Dispensing flow through into postion 7!
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: print(task.Whichsidestousefortiptouch)
      Location, plate: 7
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 1
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Set temperature - Position
      Device Device_Name=Agilent Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
