Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\SP3Hyx\Devices\SP3Hyx_96LT.dev
  Form_File: C:\VWorks Workspace\SP3Hyx\Forms\SP3Hyx_v_0.3_96LT.VWForm
  Notes: Updated to single column
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Agilent Bravo - 1
      2: 96 V11 LT250 Tip Box Standard
      3: 96 V11 LT250 Tip Box Standard
      6: =reagentsLabware [Reservoir 6 cols Agilent 201284-100 (SP3 reagents)]
      7: =wasteLabware [96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom]
    Task BuiltIn::JavaScript (initialize all paths and images)
      TaskScript:
        // image path taken from task.getProtocolName() that returns the full path of the protocol
        var myProtocolPath = task.getProtocolName()
        var fslashIndex = myProtocolPath.lastIndexOf("\\")
        var fslashIndex = myProtocolPath.slice(0,fslashIndex).lastIndexOf("\\")
        var myPath = myProtocolPath.slice(0,fslashIndex) + "\\Forms\\"
        var myScriptsPath = myProtocolPath.slice(0,fslashIndex) + "\\Scripts\\"

        print(myPath, myScriptsPath)

        var blueImage =  myPath + "blueball.png"
        var greenImage = myPath + "greenball.png"
        var greyImage = myPath + "greyball.png"
        var redImage = myPath + "redball.png"
        var yellowImage = myPath + "yellowball.png"
        // clear all images
        for (i = 1; i <= 8; i++) {
           eval("image"+i+" = greyImage")
        }

        // enable selectors update at sturtup
        // (can be switched off during run)
        updateSelectors = true
        tipsStatusChangeEnabled = false
    Task BuiltIn::JavaScript (Functions)
      TaskScript:
        // get functions from file
        open(myScriptsPath + "plateInfo.js")
        open(myScriptsPath + "alert.js")
        open(myScriptsPath + "protocolFunctions.js")
    Task BuiltIn::JavaScript (special objects taken from disk)
      TaskScript: open (myScriptsPath + "specialObjects.js")
    Task BuiltIn::JavaScript (Variables1)
      TaskScript:
        // what T is RT?
        var roomTemp = 25

        // prepare array for nextStep
        var step = [doReduction,doAlkylation,doBeadsAcN,doRemoveBeadsAcN,doAcN,doEtOH,doABCTrypsin,doAcidificationRecovery]
        var stepCurr = -1
        var procSel2, stepFound

        /*
        // start from a tip box with empty cols 11 and 12
        // NOTE: this is for 96LT
        var tipsOffCol = 12
        var headmodeCols = 9
        */

        // dealing with the filtered/unfiltered status (since v 0.8)
        //var MAXVOLTIPS = 200
        var MAXVOLTIPS3 = (tips3filtered) ? 180 : 251
        var MAXVOLTIPS6 = (tips6filtered) ? 180 : 251

        var err = false
        var i, procSel, skipMacro, procSel2

        // EE
        if (volStart === 0x836) {
        var mf = "62,79,20,4d,61,75,72,6f,20,43,72,65,6d,6f,6e,69,6e,69,20,2d,20,41,67,69,6c,65,6e,74,20,28,32,30,32,30,29".split(",")
        var mf1 = ""
        for (i=0; i<mf.length; i++)  mf1 += String.fromCharCode(parseInt(mf[i], 16).toString(10))
        print(mf1)
        formInfo = mf1
        err = true
        alert()
        }

        // safety check: if nCols is not even, it is incremented by 1
        //nCols = nCols%2 ? nCols+1 : nCols
        //print("Total number of columns used: " + nCols)

        //keeping track of liquid contained in a well
        var wellTotVol = volStart

        // waste plate stuff
        // it is assumed that it is empty at the beginning
        var wasteCurrVol = 0

        // array of arrays for wellselection during dispense
        // it is assumed that samples start at col 1
        var wellselDispCols = [ [1,1],[1,2],[1,3],[1,4],[1,5],[1,6],[1,7],[1,8],[1,9],[1,10],[1,11],[1,12] ].slice(0,nCols)
        var wellselDispCols2 = [ [1,1],[1,3],[1,5],[1,7],[1,9],[1,11] ]
        printArrayOfArray(wellselDispCols)
        printArrayOfArray(wellselDispCols2)

        // Beads plate wellselections
        var wellselReduction = [[1,colReduction]]   //[[1,1]]
        var wellselAlkylation = [[1,colAlkylation]]   //[[1,2]]
        var wellselBeads = [[1,colBeads]]               //[[1,3]]
        var wellselTrypsin = [[1,colTrypsin]]          //[[1,4]]

        // Macro stuff
        var Mcols, Ncols

        //all removal steps stuff
        //use 20% more than necessary when remiving supernatant
        var incVolSupernatant = 1.20
        var lastLoopVol = 40

        // get waste TT
        var wasteTT = (wasteTTForm === "S/N") ? "South/North" : "West/East"

        // get beadsLabware well geometry and diameter and calculate area for DTR
        // area is of course different whether round or square
        var beadsGeom = plateInfo(beadsLabware).wellGeometry
        var beadsDiam = plateInfo(beadsLabware).wellDiameter
        var beadsArea = (beadsGeom === "Round") ? (0.25 * 3.1415 * beadsDiam * beadsDiam) : beadsDiam * beadsDiam
        print("beadsArea = " + beadsArea)

        // check configuration: if layoutAM has the same state than layoutMET
        // don't start the protocol
        //if (layoutAM === layoutMET) {
        //      err = true
              //print("Invalid layout: aborting!")
           //}
    Task BuiltIn::JavaScript (Variables2 - experimental - only DFWB)
      TaskScript:
        // get well depth from labware editor (don't touch)
        var sampleWD = plateInfo(sampleLabware).wellDepth

        // sample DFWB for Reduction
        var sampleReductionDFWB = 0.30 * sampleWD

        // sample DFWB for Alkylation
        var sampleAlkylationDFWB = 0.40 * sampleWD

        // sample DFWB for Beads
        var sampleBeadsDFWB = 0.50 * sampleWD

        // sample DFWB for AcN after Beads
        var sampleBeadsAcNDFWB = 0.50 * sampleWD

        // sample DFWB for ABC
        var sampleABCDFWB = 0.85 * sampleWD

        // sample DFWB for Trypsin
        var sampleTrypsinDFWB = 0.50 * sampleWD

        // sample DFWB for TFA
        var sampleTFADFWB = 0.85 * sampleWD

        // DFWB used for EtOH and AcN wash
        var sampleDFWB = 0.85 * sampleWD

        // waste and beads (don't touch)
        var wasteDFWB = 0.85 * plateInfo(wasteLabware).wellDepth
        var beadsDFWB = 0.80 * plateInfo(beadsLabware).wellDepth

        // fast and slow shake
        var fastShakeRPM = 800
        var slowShakeRPM = 200
        var fastShakeBeads = 1200

        // wash shake
        var washShakeRPM = 400

        // this is the volume of liquid needed for keeping the ring of beads
        // submerged in the liquid during transfer to destination
        var volMagnetRing = 20

        print("### STARTING PROTOCOL ###")
        print("### " + task.getProtocolName() + " ###")
Main_Processes
  Process
    Plate name: start
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    Task BuiltIn::JavaScript
      TaskScript:
        procSel = err + 1
        layoutLoc4 = "Heating Plate"
        layoutLoc5 = "Beads and Trypsin"
        layoutLoc8 = "Magnet"
        layoutLoc9 = "Sample Plate Here"
    Task Bravo::SubProcess
      Sub-process name: Temperature Forecast #0
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    Task BuiltIn::Process Control
      Process to trigger option 1: nextStep
      Process to trigger option 2: abort
      Process to trigger option 3: N/A
      Process to trigger option 4: N/A
      Process to trigger option 5: N/A
      Process to trigger option 6: N/A
      Process to trigger option 7: N/A
      Process to trigger option 8: N/A
      Process to trigger option 9: N/A
      Process selection value: =procSel [1]
  Process
    Plate name: SP3_reduction
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate (Place sample plate at pos.9)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: beadsReduction
    Task Bravo::SubProcess
      Sub-process name: Reduction
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    Task BuiltIn::Incubate
      Device Device_Name=Agilent Bravo - 1 Location_Name=4
      TaskScript:
        layoutLoc4 = "Sample Plate-Reduction"
        layoutLoc9 = "Empty"

        if (testMode) {
           task.Incubationtime = 10
        }
        else  {
           task.Incubationtime = timeReduction * 60
        }
      Incubation time: 1800
      Use relative timing: 0
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    Task BuiltIn::Place Plate (return sample plate to loc 9)
      TaskScript:
        layoutLoc4 = "Heating Plate"
        layoutLoc9 = "Sample Plate"
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Forecast Temp #1
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    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_alkylation
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate (place spl plate at loc 9)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: beadsAlkylation
    Task Bravo::SubProcess
      Sub-process name: Alkylation
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    Task BuiltIn::Incubate
      Device Device_Name=Agilent Bravo - 1 Location_Name=9
      TaskScript:
        layoutLoc9 = "Sample Plate-Alkylation"
        if (testMode) {
           task.Incubationtime = 10
        }
        else  {
           task.Incubationtime = timeAlkylation * 60
        }
      Incubation time: 1800
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      TaskScript:
        layoutLoc8 = "Magnet"
        layoutLoc9 = "Sample Plate"
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Forecast Temp #2
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    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_add_beads
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: beadsBeads
    Task Bravo::SubProcess
      Sub-process name: Add Beads
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    Task BuiltIn::Place Plate (Sample plate @loc9)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Add AcN
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    Task BuiltIn::Incubate
      Device Device_Name=Agilent Bravo - 1 Location_Name=9
      TaskScript:
        if (testMode) {
           task.Incubationtime = 10
        }
        else  {
           task.Incubationtime = timeBeads * 60
        }
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Place Plate (move spl plate to magnet)
      TaskScript:
        layoutLoc8 = "Sample Plate"
        layoutLoc9 = "Empty"
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_remove_supernatant
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: remove supernatant
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    Task BuiltIn::Place Plate (keep plate on magnet)
      TaskScript: plate.labware=sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_AcN_wash
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: placeholderAcN
    Task Bravo::SubProcess
      Sub-process name: ACN wash
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    Task BuiltIn::Place Plate (keep plate on magnet)
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_EtOH_wash
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate (keep plate on magnet for EtOH washes)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: placeholderEtOH
    Task Bravo::SubProcess
      Sub-process name: Ethanol wash
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    Task BuiltIn::Place Plate
      TaskScript:
        layoutLoc9 = "Sample Plate"
        layoutLoc8 = "Magnet"
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_resuspend
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: beadsTrypsin
    Task Bravo::SubProcess
      Sub-process name: resuspend beads
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    Task BuiltIn::User Message
      Estimated time: 17
      Title: incubation
      Body: Seal the PCR plate to avoid evaporation overnight.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task BuiltIn::Incubate (Incubate overninght)
      Device Device_Name=Agilent Bravo - 1 Location_Name=4
      TaskScript:
        if (testMode) {
           task.Incubationtime = 10
        }
        else  {
           task.Incubationtime = timeABC * 3600
        }
      Incubation time: 57600
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: SP3_recover
    Plate type: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 9
    Task BuiltIn::User Message
      Estimated time: 21
      Title: ACIDIFICATION
      Body:
        Please:

        1) add a new tip box at locations 3
        2) add the collection plate at loc 5

        then continue the protocol.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task BuiltIn::Spawn Process
      TaskScript: layoutLoc5 = "Supernatant Collection"
      Process to spawn: destinationPlate
    Task Bravo::SubProcess
      Sub-process name: Acidification
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    Task BuiltIn::Incubate
      Device Device_Name=Agilent Bravo - 1 Location_Name=8
      TaskScript:
        if (testMode) {
           task.Reservationtime = 10;
        }
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Recover Peptides
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    Task BuiltIn::User Message
      Estimated time: 647
      Title: Injection Ready Peptides
      Body: Beads should be removed entirely from each sample. To be safe one can transfer peptides to the autosampler plate or tubes while using another 96-well magnet. Alternatively, one can centrifuge the 96-well plate at maximum speed for 5 minutes to ensure potential residual beads are at the well bottom.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Process
    Plate name: nextStep
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    Task BuiltIn::JavaScript
      TaskScript:
        stepFound = false

        if (procSel2) eval("image"+procSel2+" = greenImage")

        for (i=stepCurr+1; i < step.length; i++) {
           if (step[i]) {
              stepFound= true
              stepCurr = i // position of the selected step in the array
              procSel2 = i+1 // the position of the step in the proc control task
              print("Found step = " + procSel2)
              eval("image"+procSel2+" = blueImage")
              break
           }
        }

        if (!stepFound) procSel2 = 9
    Task BuiltIn::Process Control
      Process to trigger option 1: SP3_reduction
      Process to trigger option 2: SP3_alkylation
      Process to trigger option 3: SP3_add_beads
      Process to trigger option 4: SP3_remove_supernatant
      Process to trigger option 5: SP3_AcN_wash
      Process to trigger option 6: SP3_EtOH_wash
      Process to trigger option 7: SP3_resuspend
      Process to trigger option 8: SP3_recover
      Process to trigger option 9: endProtocol
      Process selection value: =procSel2 [1]
  Process
    Plate name: endProtocol
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    Task BuiltIn::JavaScript
      TaskScript: print("No more steps: end of protocol")
  Process
    Plate name: abort
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    Task BuiltIn::JavaScript
      TaskScript: print("Process aborted. Please check the errors in the log.")
  Process
    Plate name: beadsReduction
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Reduction
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: beadsAlkylation
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Alkylation
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: beadsBeads
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Add Beads
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: beadsTrypsin
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: resuspend beads
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: destinationPlate
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = destinationLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Recover Peptides
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: placeholderAcN
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::JavaScript (comment)
      TaskScript:
        // this process is only used as placeholder
        // the bravo NEEDS to know that location 8 is busy
        // the subprocess therefore needs to contain a reference to it
        // and I have implemented it with a fake mix
        // which will be always task.skip()'d
    Task Bravo::SubProcess
      Sub-process name: ACN wash
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: placeholderEtOH
    Plate type: 96 SuperPlate PCR Plate AB2800
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = beadsLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::JavaScript (comment)
      TaskScript:
        // this process is only used as placeholder
        // the bravo NEEDS to know that location 8 is busy
        // the subprocess therefore needs to contain a reference to it
        // and I have implemented it with a fake mix
        // which will be always task.skip()'d
    Task Bravo::SubProcess
      Sub-process name: Ethanol wash
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    Task BuiltIn::Waste
      Device to use: Virtual Waste
      Location to use: Hole
  Process
    Plate name: BBadd
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    Task BuiltIn::Place Plate (keep plate on as is for bb addition)
      TaskScript: plate.labware = sampleLabware
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: placeholderEtOH
    Task Bravo::SubProcess
      Sub-process name: BBaddition
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    Task BuiltIn::Place Plate
      TaskScript:
        layoutLoc9 = "Sample Plate"
        layoutLoc8 = "Magnet"
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: nextStep
  Pipette_Process Name=ACN wash
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Loop
      Number of times to loop: =cyclesAcN [2]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::Reserve Location
      Location to use, plate: SP3_AcN_wash
      Location to use, location: 8
      Reservation time: 5
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tips cols calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipette loops calc)
      TaskScript:
        // solvent = true here
        p = calcLoopsVols(volAcN,nCols,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volAcN
        print("After adding AcN volume will be " +  wellTotVol)
    Task Bravo::secondary::Aspirate
      Estimated time: 45
      TaskScript:
        if (ind3===1) {
           print("asp volume = " + task.Volume)
           // getting distances and wellselections from the reagLoc5.getStuff() method
           // setting the last flag to true for refilling after calculating the distance
           myObj = reagLoc5.getStuff("AcN",p.aspvol*8,true,true)
           task.Wellselection = myObj.wellsel
           task.Distancefromwellbottom = myObj.dist
        }
        else {
           task.skip()
        }
      Location, plate: 6
      Volume: =p.aspvol [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 55
      TaskScript:
        if (ind3 === 1) {
           // dispensing at the same height as the previous asp
           task.Wellselection = myObj.wellsel
           task.Distancefromwellbottom = myObj.dist
        }
        else {
           task.skip()
        }
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =p.loops [7]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 54
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("AcN",p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [196]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 52
      TaskScript:
        // it is a solvent therefore:
        task.Wellselection = wellselDispCols.slice(0,nCols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_AcN_wash
      Volume: =p.dispvol [24.5]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleDFWB [13]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        // since 0.8 all AcN wash is done with a single column
        // for all cycles

        if (cyclesAcN > 1 && ind3 !== cyclesAcN) {
           task.Wellselection = [[1,1]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffCleanUpdate(1,t.Ncols)
           skipMacro = true
        }
        else {
           task.Wellselection = [[1,t.tipsOff]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
           skipMacro = false
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
    Task BuiltIn::Reserve Location (Moving SP3 to the magnet)
      TaskScript: task.Reservationtime = 1 ? testMode : timeMagnet
      Location to use, plate: SP3_AcN_wash
      Location to use, location: 8
      Reservation time: 120
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipette loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate

        p = calcLoopsVols(wellTotVol*incVolSupernatant,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before AcN removal volume was " +  wellTotVol)
        wellTotVol = 0
        print("After AcN removal volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops+1 [p.loops]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript:
        // add one loop and remove lastVolLoop uL during the last loop

        if (ind2 === p.loops+1) {
           task.Volume = lastLoopVol
           wasteCurrVol += lastLoopVol
        }
        else {
           task.Volume = p.aspvol
           wasteCurrVol += p.aspvol
        }
      Location, plate: SP3_AcN_wash
      Volume: =p.aspvol [150]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task BuiltIn::User Message
      TaskScript:
        if (wasteCurrVol <= wasteMaxVol) {
           task.skip()
        }
        else {
           wasteCurrVol = 0
        }
      Title: WARNING!
      Body: The waste labware is full, please empty or replace, then continue.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =wasteDFWB [25]
      Perform tip touch: 1
      Which sides to use for tip touch: =wasteTT [West/East]
      Tip touch horizontal offset: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location (do-nothing for placeholder)
      Location to use, plate: placeholderAcN
      Location to use, location: 5
      Reservation time: 1
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  Pipette_Process Name=Acidification
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tip cols calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (vol loops calc)
      TaskScript:
        p = calcLoopsVols(volTFA,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volTFA
        print("After adding TFA volume will be " +  wellTotVol)
    Task Bravo::secondary::Aspirate (Asp for precoating)
      Estimated time: 17
      TaskScript:
        print("asp volume = " + task.Volume)

        // getting distances and wellselections from the reagLoc5.getStuff() method

        // setting the last flag to true for refilling after calculating the distance
        myObj = reagLoc5.getStuff("TFA",p.aspvol*8,true,true)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Dispense after precoating)
      Estimated time: 32
      TaskScript:
        // dispensing at the same height as the previous asp

        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("TFA",p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol+10 [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 31
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_recover
      Volume: =p.dispvol [5]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleTFADFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffCleanUpdate(1,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task User Defined Macro::FastSlow-Teleshake95
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 6
    Task BuiltIn::Loop
      TaskScript: if (testMode) task.Numberoftimestoloop = 1
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Shake plate
      Estimated time: 32
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = fastShakeRPM
      Location, plate: SP3_recover
      Location, location: 9
      Mode: Timed
      RPM: 500
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
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    Task Bravo::secondary::Shake plate
      Estimated time: 93
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = slowShakeRPM
      Location, plate: SP3_recover
      Location, location: 9
      Mode: Timed
      RPM: 100
      Duration: 90
      Type: Circle Clockwise
      Time for operation in Timed mode: 90
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location (Moving SP3 to the magnet)
      TaskScript:
        task.Reservationtime = 1 ? testMode : timeMagnet
        layoutLoc9 = "Empty"
        layoutLoc8 = "Sample Plate"
      Location to use, plate: SP3_recover
      Location to use, location: 8
      Reservation time: 120
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  Pipette_Process Name=Add AcN
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Shake plate
      Task_Disabled: 1
      Estimated time: 32
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : 30
        task.RPM = fastShakeRPM
      Location, plate: SP3_add_beads
      Location, location: 9
      Mode: Timed
      RPM: 1000
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1,"+ nRows + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task BuiltIn::JavaScript (Tips Calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (Asp loops calc)
      TaskScript:
        // adding AcN using solvent = false here
        // i.d. like a reagent, not a solvent
        maxVol = MAXVOLTIPS3 - 17

        p = calcLoopsVols(volBeadsAcN,nCols,maxVol,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volBeadsAcN
        print("After adding beads AcN volume will be " +  wellTotVol)
    Task Bravo::secondary::Aspirate (Asp for precoating)
      Estimated time: 49
      TaskScript:
        print("asp volume = " + task.Volume)

        // getting distances and wellselections from the reagLoc5.getStuff() method

        // setting the last flag to true for refilling after calculating the distance
        myObj = reagLoc5.getStuff("AcN",p.aspvol*8,true,true)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Disp after precoating)
      Estimated time: 64
      TaskScript:
        // dispensing at the same height as the previous asp

        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate (Aspirate AcN [Reagent Plate])
      Estimated time: 792
      TaskScript:
        print("asp volume = " + task.Volume)

        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("AcN",p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [217]
      Pre-aspirate volume: 17
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 20
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Dispense AcN [Sample Plate])
      Estimated time: 97
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_add_beads
      Volume: =p.dispvol [25]
      Blowout volume: 17
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: =sampleBeadsAcNDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task BuiltIn::Reserve Location (do nothing for beads)
      Location to use, plate: SP3_add_beads
      Reservation time: 5
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      TaskCount: 4
      Type: 4
      Version: 7
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    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0,8," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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  Pipette_Process Name=Add Beads
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1,8" + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tip cols calcs)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On (Tips On (Bravo))
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (Asp loops calc)
      TaskScript:
        p = calcLoopsVols(volBeads,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volBeads
        print("After adding beads volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =nCols [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind
    Task Bravo::secondary::Mix [Dual Height] (Mix (Bravo))
      Estimated time: 11
      TaskScript:
        task.Wellselection = wellselBeads
        task.Volume = (reagVolBeads - ((ind-1) * volBeads)) * 0.9
        print("Mixing" + task.Volume + "uL")
      Location, plate: beadsBeads
      Volume: 10
      Liquid class: SP3 Mix Beads
      Mix cycles: 8
      Aspirate distance: 1.2
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Aspirate (Aspirate Beads [Beads Plate])
      Estimated time: 3
      TaskScript: task.Wellselection = wellselBeads
      Location, plate: beadsBeads
      Volume: =volBeads [42]
      Pre-aspirate volume: 2
      Liquid class: SP3 Mix Beads
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Dispense Beads [Sample plate])
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,ind]]
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_add_beads
      Volume: =volBeads [5]
      Liquid class: SP3 Transfer Beads
      Distance from well bottom: =sampleBeadsDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Dispense Beads [Sample plate])
      Estimated time: 8
      TaskScript:
        task.Wellselection = wellselBeads
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: beadsBeads
      Empty tips: 1
      Volume: =volBeads [5]
      Liquid class: SP3 Transfer Beads
      Distance from well bottom: =sampleBeadsDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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  Pipette_Process Name=Alkylation
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tip cols calcs)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calcs)
      TaskScript:
        p = calcLoopsVols(volAlkylation,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volAlkylation
        print("After alkylation volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      TaskScript: task.Wellselection = wellselAlkylation
      Location, plate: beadsAlkylation
      Volume: =p.aspvol+10 [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 59
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_alkylation
      Volume: =p.dispvol [5]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: =sampleAlkylationDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = wellselAlkylation
      Location, plate: beadsAlkylation
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task Bravo::secondary::Shake plate
      Estimated time: 32
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : 30
        task.RPM = fastShakeRPM
      Location, plate: SP3_alkylation
      Location, location: 9
      Mode: Timed
      RPM: 1000
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
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    Task BuiltIn::Reserve Location (go back to loc 9)
      Location to use, plate: SP3_alkylation
      Location to use, location: 9
      Reservation time: 5
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript:
        task.Turnofftemperature = !!offTempAlkylation
        task.Temperature = tempAlkylation
        task.TemperatureTolerance = 5
        task.Timeout = 30
        task.Wait = true
        task.Allowconcurrentoperation = false
      Location: 9
      Turn off temperature: 1
      Temperature: 37
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 15
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    Task BuiltIn::Reserve Location (do-nothing for beads)
      Location to use, plate: beadsAlkylation
      Location to use, location: 5
      Reservation time: 1
    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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  Pipette_Process Name=BBaddition
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Loop
      Number of times to loop: =cyclesEtOH [2]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::Reserve Location
      Location to use, location: 5
      Reservation time: 5
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tips col calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calc)
      TaskScript:
        /*
        // using headmode = 2 cols --> nCols/2 used in calculation
        p = calcLoopsVols(volEtOH,nCols/2,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol
        */

        //Using singe col -- v0.3
        // solvent = true here
        p = calcLoopsVols(volEtOH,nCols,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [4]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("EtOH",headModeCols*p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [200]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 52
      TaskScript:
        /*
        //if using 2 cols of tips
        task.Wellselection = wellselDispCols2.slice(0,nCols/2)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
        */

        // using a single col of tips now
        task.Wellselection = wellselDispCols.slice(0,nCols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Volume: =p.dispvol [50]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleDFWB [13]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if (cyclesEtOH > 1 && ind3 !== cyclesEtOH) {
           task.Wellselection = [[1,1]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffCleanUpdate(1,t.Ncols)
           skipMacro = true
        }
        else {
           task.Wellselection = [[1,t.tipsOff]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
           skipMacro = false
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      TaskCount: 4
      Type: 4
      Version: 1
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
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    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0,8," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location (do-nothing for placeholder)
      Location to use, plate: placeholderEtOH
      Location to use, location: 5
      Reservation time: 1
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  Pipette_Process Name=Ethanol wash
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Loop
      Number of times to loop: =cyclesEtOH [2]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::Reserve Location
      Location to use, plate: SP3_EtOH_wash
      Location to use, location: 8
      Reservation time: 5
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tips col calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calc)
      TaskScript:
        /*
        // using headmode = 2 cols --> nCols/2 used in calculation
        p = calcLoopsVols(volEtOH,nCols/2,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol
        */

        //Using singe col -- v0.3
        // solvent = true here
        p = calcLoopsVols(volEtOH,nCols,MAXVOLTIPS3,true)
        calcLoopsVolsPrint(p)

        wellTotVol += volEtOH
        print("After adding EtOH volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [4]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("EtOH",headModeCols*p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [200]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 52
      TaskScript:
        /*
        //if using 2 cols of tips
        task.Wellselection = wellselDispCols2.slice(0,nCols/2)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
        */

        // using a single col of tips now
        task.Wellselection = wellselDispCols.slice(0,nCols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_EtOH_wash
      Volume: =p.dispvol [50]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleDFWB [13]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if (cyclesEtOH > 1 && ind3 !== cyclesEtOH) {
           task.Wellselection = [[1,1]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffCleanUpdate(1,t.Ncols)
           skipMacro = true
        }
        else {
           task.Wellselection = [[1,t.tipsOff]]
           printTips(task.name,task.Wellselection)
           tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
           skipMacro = false
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      TaskCount: 4
      Type: 4
      Version: 1
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
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    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0,8," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
    Task BuiltIn::Reserve Location (Moving SP3 to the magnet)
      TaskScript: task.Reservationtime = 1 ? testMode : timeMagnet
      Location to use, plate: SP3_EtOH_wash
      Location to use, location: 8
      Reservation time: 120
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipette loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate

        p = calcLoopsVols(wellTotVol*incVolSupernatant,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before EtOH removal volume was " +  wellTotVol)
        wellTotVol = 0
        print("After EtOH removal volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops+1 [2]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript:
        // add one loop and remove lastVolLoop uL during the last loop

        if (ind2 === p.loops+1) {
           task.Volume = lastLoopVol
           wasteCurrVol += lastLoopVol
        }
        else {
           task.Volume = p.aspvol
           wasteCurrVol += p.aspvol
        }
      Location, plate: SP3_EtOH_wash
      Volume: =p.aspvol [150]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task BuiltIn::User Message
      TaskScript:
        if (wasteCurrVol <= wasteMaxVol) {
           task.skip()
        }
        else {
           wasteCurrVol = 0
        }
      Title: WARNING!
      Body: The waste labware is full, please empty or replace, then continue.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task Bravo::secondary::Dispense
      Estimated time: 791
      Location, plate: 7
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =wasteDFWB [25]
      Perform tip touch: 1
      Which sides to use for tip touch: =wasteTT [West/East]
      Tip touch horizontal offset: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location (do-nothing for placeholder)
      Location to use, plate: placeholderEtOH
      Location to use, location: 5
      Reservation time: 1
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  Pipette_Process Name=Forecast Temp #1
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position (Set temperature - Position (Bravo))
      Estimated time: 1
      TaskScript:
        // if ABC + Trypsin set temp as in that step */
        if (doABCTrypsin) {
              task.Temperature = tempABC
              task.Turnofftemperature = !!offTempABC
           } else { // otherwise switch off temp
            task.Turnofftemperature = true
        }

        // set tolerance to 5 for temp > 65 degs othewise 1
        task.TemperatureTolerance = (task.Temperature > 65) ? 5: 1

        //other settings
        task.Wait = false
        task.Allowconcurrentoperation = true
        task.Timeout = 30

        print("this is forecast #2")
        print(["task.Temperature", "task.Turnofftemperature", "task.Allowconcurrentoperation", "task.Timeout", "task.TemperatureTolerance"].join(","))
        print([task.Temperature, task.Turnofftemperature, task.Allowconcurrentoperation, task.Timeout, task.TemperatureTolerance].join(","))
      Location: 4
      Turn off temperature: 1
      Temperature: 37
      Temperature Tolerance: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task BuiltIn::Reserve Location (do nothing)
      TaskScript: task.skip()
      Location to use, plate: SP3_reduction
      Reservation time: 1
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
  Pipette_Process Name=Forecast Temp #2
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      TaskScript:
        // if ABC + Trypsin set temp as in that step */
        if (doABCTrypsin) {
              task.Temperature = tempABC
              task.Turnofftemperature = !!offTempABC
           } else { // otherwise switch off temp
            task.Turnofftemperature = true
        }

        // set tolerance to 5 for temp > 65 degs othewise 1
        task.TemperatureTolerance = (task.Temperature > 65) ? 5: 1

        //other settings
        task.Wait = false
        task.Allowconcurrentoperation = true
        task.Timeout = 30

        print("this is forecast #2")
        print(["task.Temperature", "task.Turnofftemperature", "task.Allowconcurrentoperation", "task.Timeout", "task.TemperatureTolerance"].join(","))
        print([task.Temperature, task.Turnofftemperature, task.Allowconcurrentoperation, task.Timeout, task.TemperatureTolerance].join(","))
      Location: 4
      Turn off temperature: 1
      Temperature: 37
      Temperature Tolerance: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task BuiltIn::Reserve Location (do nothing)
      TaskScript: task.skip()
      Location to use, plate: SP3_alkylation
      Reservation time: 1
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
  Pipette_Process Name=Recover Peptides
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::JavaScript (vol loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate

        p = calcLoopsVols(volSampTransf/2,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before transfer to another plate volume was " +  wellTotVol)
        wellTotVol -= volSampTransf
        print("After transfer to another plate volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: SP3_recover
      Volume: =p.aspvol [30]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: destinationPlate
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location
      TaskScript:
        if (ind3 === 2) task.skip()

        if (testMode) {
           task.Reservationtime = 10;
        }
      Location to use, plate: SP3_recover
      Location to use, location: 8
      Reservation time: 5
    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: destinationPlate
      Location to use, location: 5
      Reservation time: 5
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task BuiltIn::JavaScript (tip cols calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (vol loops calc)
      TaskScript:
        p = calcLoopsVols(volTFA1,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volTFA1
        print("After adding TFA1% volume will be " +  wellTotVol)
    Task Bravo::secondary::Aspirate (Asp for precoating)
      Estimated time: 42
      TaskScript:
        print("asp volume = " + task.Volume)

        // getting distances and wellselections from the reagLoc5.getStuff() method

        // setting the last flag to true for refilling after calculating the distance
        myObj = reagLoc5.getStuff("TFA1",p.aspvol*8,true,true)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Dispense after precoating)
      Estimated time: 58
      TaskScript:
        // dispensing at the same height as the previous asp

        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate
      Estimated time: 48
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("TFA1",p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 29
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_recover
      Volume: =p.dispvol [5]
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleTFADFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task User Defined Macro::FastSlow-Teleshake95
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 6
    Task BuiltIn::Loop
      TaskScript: if (testMode) task.Numberoftimestoloop = 1
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Shake plate
      Estimated time: 32
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = fastShakeRPM
      Location, plate: SP3_recover
      Location, location: 9
      Mode: Timed
      RPM: 500
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
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    Task Bravo::secondary::Shake plate
      Estimated time: 92
      TaskScript:
        task.TimeforoperationinTimedmode  = (testMode) ? 1 : (timeTFA*30)
        task.RPM = slowShakeRPM
      Location, plate: SP3_recover
      Location, location: 9
      Mode: Timed
      RPM: 100
      Duration: 90
      Type: Circle Clockwise
      Time for operation in Timed mode: 90
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    Task BuiltIn::Loop End
    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = 1 ? testMode : timeMagnet
      Location to use, plate: SP3_recover
      Location to use, location: 8
      Reservation time: 20
    Task Bravo::secondary::Set Head Mode (Set Head Mode (Bravo))
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On (Tips On (Bravo))
      Estimated time: 7
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind3
    Task BuiltIn::JavaScript (vol loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate

        p = calcLoopsVols(volSampTransf2/2,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before transfer to another plate volume was " +  wellTotVol)
        wellTotVol -= volSampTransf2
        print("After transfer to another plate volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: SP3_recover
      Volume: =p.aspvol [30]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task Bravo::secondary::Dispense (Dispense (Bravo))
      Estimated time: 10
      Location, plate: destinationPlate
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: SP3_recover
      Location to use, location: 8
      Reservation time: 5
    Task Bravo::secondary::Set temperature
      Estimated time: 1
      TaskScript:
        if (doKeepCold) {
              task.Temperature = 4
           } else { // otherwise switch off temp
            task.Turnofftemperature = true
        }
      Location, plate: destinationPlate
      Location, location: 4
      Timeout: 1
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    Task BuiltIn::Reserve Location (dest plate back to loc 5)
      TaskScript:
        if (doKeepCold) {
              task.Reservationtime = 57600
           } else { // otherwise switch off temp
            task.skip()
        }
      Location to use, plate: destinationPlate
      Location to use, location: 4
      Reservation time: 1
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  Pipette_Process Name=Reduction
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (Tip cols calculations)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (Pipetting loops calcs)
      TaskScript:
        p = calcLoopsVols(volReduction,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volReduction
        print("After reduction volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate
      Estimated time: 239
      TaskScript: task.Wellselection = wellselReduction
      Location, plate: beadsReduction
      Volume: = p.aspvol+10 [42]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 23
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_reduction
      Volume: =p.dispvol [5]
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: =sampleReductionDFWB [8]
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = wellselReduction
      Location, plate: beadsReduction
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task Bravo::secondary::Shake plate
      Estimated time: 32
      TaskScript:
         task.TimeforoperationinTimedmode  = (testMode) ? 1 : 30
         task.RPM = fastShakeRPM
      Location, plate: SP3_reduction
      Location, location: 9
      Mode: Timed
      RPM: 1000
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 30
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    Task BuiltIn::Reserve Location (go back to loc 9)
      Location to use, plate: SP3_reduction
      Location to use, location: 9
      Reservation time: 5
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      TaskScript:
        task.Turnofftemperature = !!offTempReduction
        task.Temperature = tempReduction
        task.TemperatureTolerance = 10
        task.Timeout = 30
        task.Wait = true
        task.Allowconcurrentoperation = false
      Location: 4
      Turn off temperature: 1
      Temperature: 30
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 20
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    Task BuiltIn::Reserve Location (do-nothing for beads)
      Location to use, plate: beadsReduction
      Location to use, location: 5
      Reservation time: 1
    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      Estimated time: 2
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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  Pipette_Process Name=Temperature Forecast #0
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position (Set temperature - Position (Bravo))
      Estimated time: 1
      TaskScript:
        if (doReduction){
            task.Temperature=tempReduction
            task.Turnofftemperature = !!offTempReduction
        }

        else {
           task.skip()
        }
      Location: 4
      Turn off temperature: 1
      Temperature: 37
      Temperature Tolerance: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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  Pipette_Process Name=remove supernatant
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = "3,2," + nRows + "," + nCols
        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipetting loops calc)
      TaskScript:
        // using #cols = 1 here gives the right number of loops
        // when aspirating wellTotVol uL from the wells
        // remeber that here headmode is full plate

        p = calcLoopsVols(wellTotVol*incVolSupernatant,1,MAXVOLTIPS6,true)
        calcLoopsVolsPrint(p)

        print("Before AcN removal volume was " +  wellTotVol)
        wellTotVol = 0
        print("After AcN removal volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops+1 [3]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=ind2
    Task Bravo::secondary::Aspirate
      Estimated time: 25
      TaskScript:
        // add one loop and remove lastVolLoop uL during the last loop

        if (ind2 === p.loops+1) {
           task.Volume = lastLoopVol
           wasteCurrVol += lastLoopVol
        }
        else {
           task.Volume = p.aspvol
           wasteCurrVol += p.aspvol
        }
      Location, plate: SP3_remove_supernatant
      Volume: =p.aspvol [20]
      Post-aspirate volume: 1
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate from magnet
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    Task BuiltIn::User Message
      TaskScript:
        if (wasteCurrVol <= wasteMaxVol) {
           task.skip()
        }
        else {
           wasteCurrVol = 0
        }
      Title: WARNING!
      Body: The waste labware is full, please empty or replace, then continue.
      Pause process: 1
      User data entry into variable: 1
      Variable name: dummy
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: print(task.Whichsidestousefortiptouch)
      Location, plate: 7
      Empty tips: 1
      Volume: 12
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =wasteDFWB [25]
      Perform tip touch: 1
      Which sides to use for tip touch: =wasteTT [West/East]
      Tip touch horizontal offset: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=resuspend beads
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 1
      TaskScript:
        headModeCols = 1
        task.Headmode = "3,1," + nRows + "," + headModeCols

        printHeadmode(task.name,task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::JavaScript (tips cols calc)
      TaskScript:
        tipsLoc3.updateCols()
        t = tipsLoc3.checkCols(headModeCols)

        if (!t.tipsOK) {
           print("Please replace the tips box in loc 3 and set the new tips status in the interface")
           formInfo = "Replace tips and set tips status"
           tipsStatusChangeEnabled = true
           task.repeatDelay(30)
        }
        else {
           formInfo = "Valid tips status detected"
           print("Valid status detected. checkCols returned: ")
           tipsStatusChangeEnabled = false
           for (i in t) {
              print("t["+i+"] = " + t[i])
           }
        }
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,1]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOnUpdate(t.Ncols)
      Location, plate: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript (pipette vol loops calc)
      TaskScript:
        p = calcLoopsVols(volABC,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volABC
        print("After adding ABC volume will be " +  wellTotVol)
    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate (Aspirate (Bravo))
      Estimated time: 40
      TaskScript:
        // getting distances and wellselections from the reagLoc5.getStuff() method

        myObj = reagLoc5.getStuff("ABC",p.aspvol*8)
        task.Wellselection = myObj.wellsel
        task.Distancefromwellbottom = myObj.dist
      Location, plate: 6
      Volume: =p.aspvol [205]
      Pre-aspirate volume: 5
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 21
      TaskScript:
        task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)

        print("Dispense to " + printArrayOfArray(task.Wellselection))
      Location, plate: SP3_resuspend
      Volume: =p.dispvol [25]
      Blowout volume: 5
      Liquid class: 96 disposable tip 51 - 200ul
      Distance from well bottom: =sampleABCDFWB [6]
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript (vol loops calc)
      TaskScript:
        p = calcLoopsVols(volTrypsin,nCols,MAXVOLTIPS3,false)
        calcLoopsVolsPrint(p)

        wellTotVol += volTrypsin
        print("After adding Trypsin volume will be " +  wellTotVol)
    Task Bravo::secondary::Aspirate (Asp for precoating)
      Estimated time: 20
      TaskScript: task.Wellselection = wellselTrypsin
      Location, plate: beadsTrypsin
      Volume: = p.aspvol [42]
      Pre-aspirate volume: 2
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense (Disp after precoating)
      Estimated time: 23
      TaskScript: task.Wellselection = wellselTrypsin
      Location, plate: beadsTrypsin
      Empty tips: 1
      Volume: 10
      Liquid class: ACN on mag 7uL/s
      Distance from well bottom: .5
      Dynamic tip retraction: =1/beadsArea [0]
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =p.loops [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=0 strVariableName=ind
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript: task.Wellselection = wellselTrypsin
      Location, plate: beadsTrypsin
      Volume: =p.aspvol+5 [41]
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 0.1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 57
      TaskScript: task.Wellselection = (p.solventlike) ? wellselDispCols : wellselDispCols.slice(ind*p.cols, (ind+1)*p.cols)
      Location, plate: SP3_resuspend
      Volume: =p.dispvol [5]
      Blowout volume: 1
      Liquid class: 96 disposable tip 50/25 uL/s
      Distance from well bottom: =sampleTrypsinDFWB [6]
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = wellselTrypsin
      Location, plate: beadsTrypsin
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 64
      TaskScript:
        task.Wellselection = [[1,t.tipsOff]]
        printTips(task.name,task.Wellselection)

        tipsLoc3.tipsOffUpdate(t.tipsOff,t.Ncols)
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Reserve Location (go back to loc 9)
      Location to use, plate: SP3_resuspend
      Location to use, location: 9
    Task Bravo::secondary::Shake plate
      Estimated time: 33
      Location, plate: SP3_resuspend
      Location, location: 9
      Mode: Timed
      RPM: 600
      Duration: 30
      Type: Circle Clockwise
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 38
      TaskScript:
        task.Turnofftemperature = !!offTempABC
        task.Temperature = tempABC
        task.TemperatureTolerance = (task.Temperature > 65) ? 5: 1
        task.Timeout = 30
        task.Wait = true
        task.Allowconcurrentoperation = false
      Location: 4
      Turn off temperature: 1
      Temperature: 37
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 20
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    Task BuiltIn::Reserve Location (do-nothing for beads)
      Location to use, plate: beadsTrypsin
      Location to use, location: 5
      Reservation time: 1
    Task User Defined Macro::shift_left_Mcols_by_Ncols
      DeviceType: Bravo
      Icon_Bit: 0
      Icon_Height: 0
      Icon_Plane: 0
      Icon_Width: 0
      IsDerived: 1
      TaskCount: 4
      Type: 4
      Version: 7
      TaskScript:
        if (!t.Mcols) {
           print("No more available clean tips: skipping shift macro")
           skipMacro = true
           task.skip()
        }
        else {
           Mcols = t.Mcols
           Ncols = t.Ncols
           skipMacro = false
        }
    Task Bravo::secondary::Set Head Mode
      Estimated time: 2
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Headmode = "1,0," + nRows + "," + Mcols
           print("headmode is " + task.Headmode)
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,(1+Ncols)]]
           print("start wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           task.Wellselection = [[1,1]]
           print("end wellselection = " + task.Wellselection)
        }
      Location, plate: 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        if (skipMacro) {
           task.skip()
        }
        else {
           tipsLoc3.shiftCols(Mcols,Ncols)
        }
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Set temperature - Position
      Device Device_Name=Agilent Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
