velocity11 Form_Data 1.0
MainContainer
  OperatorConsoleStatic Display string: SP3-Hyx protocol (96LT head)
  OperatorConsoleStatic Display string: version 0.4 -- Sep 2024
  TimeElapsed
    Text: Elapsed Time: 00:00:00
    Value: 06:56:28
  OverallProgress Value: 100
  OperatorConsoleGroup
    Group name: Input parameters
    OperatorConsoleStatic Display string: Number of rows
    OperatorConsoleDroplist
      JavaScript variable: nRows
      Items: 1;2;3;4;5;6;7;8
      Default value: 8
      Value: 6
    OperatorConsoleStatic Display string: Number of columns
    OperatorConsoleDroplist
      JavaScript variable: nCols
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 2
    OperatorConsoleStatic Display string: Time on magnet (sec)
    OperatorConsoleTextBox
      JavaScript variable: timeMagnet
      Default value: 20
    OperatorConsoleStatic Display string: Starting volume
    OperatorConsoleTextBox
      JavaScript variable: volStart
      Min. value: 0
      Default value: 20
      Value: 25
    OperatorConsoleImage
      JavaScript variable: image1
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doReduction
      Default value: 0
      Caption: Perform reduction
    OperatorConsoleStatic Display string: Volume of reducing agent
    OperatorConsoleTextBox
      JavaScript variable: volReduction
      Mandatory: 1
      Min. value: 0
      Default value: 4
      Value: 5
    OperatorConsoleStatic Display string: Temp
    OperatorConsoleTextBox
      JavaScript variable: tempReduction
      Mandatory: 1
      Default value: 60
    OperatorConsoleCheckbox
      JavaScript variable: offTempReduction
      Default value: 0
      Caption: off
    OperatorConsoleStatic Display string: Time (min)
    OperatorConsoleTextBox
      JavaScript variable: timeReduction
      Mandatory: 1
      Default value: 30
    OperatorConsoleStatic Display string: Sample on Loc9
    OperatorConsoleStatic Display string: Minimum 2 uL
    OperatorConsoleTextBox
      JavaScript variable: volAlkylation
      Mandatory: 1
      Min. value: 0
      Default value: 4
      Value: 5
    OperatorConsoleTextBox
      JavaScript variable: timeAlkylation
      Mandatory: 1
      Default value: 30
    OperatorConsoleImage
      JavaScript variable: image2
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doAlkylation
      Default value: 0
      Caption: Perform alkylation
    OperatorConsoleStatic Display string: Volume of alkylating agent
    OperatorConsoleStatic Display string: Temp
    OperatorConsoleTextBox
      JavaScript variable: tempAlkylation
      Mandatory: 1
      Default value: 25
    OperatorConsoleCheckbox
      JavaScript variable: offTempAlkylation
      Default value: 0
      Caption: off
    OperatorConsoleStatic Display string: Time (min)
    OperatorConsoleStatic Display string: Sample on Loc9
    OperatorConsoleStatic Display string: Minimum 2 uL
    OperatorConsoleImage
      JavaScript variable: image3
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doBeadsAcN
      Default value: 0
      Caption: Perform beads+AcN addition
      Value: 1
    OperatorConsoleStatic Display string: Volume of beads
    OperatorConsoleTextBox
      JavaScript variable: volBeads
      Mandatory: 1
      Min. value: 0
      Default value: 10
    OperatorConsoleStatic Display string: Sample on Loc9
    OperatorConsoleStatic Display string: Volume of AcN for beads
    OperatorConsoleTextBox
      JavaScript variable: volBeadsAcN
      Mandatory: 1
      Min. value: 0
      Default value: 25
      Value: 80
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formVolFuncs.js")
        open(scriptsPath + "alert.js")

        if ( !formSetAcN70() ) alert()
      Caption: Set 70% AcN
    OperatorConsoleStatic Display string: Time (min)
    OperatorConsoleTextBox
      JavaScript variable: timeBeads
      Default value: 10
      Value: 2
    OperatorConsoleImage
      JavaScript variable: image4
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doRemoveBeadsAcN
      Default value: 0
      Caption: Perform beads AcN removal
    OperatorConsoleStatic Display string: Sample on Loc8
    OperatorConsoleTextBox
      JavaScript variable: volAcN
      Mandatory: 1
      Min. value: 0
      Default value: 100
    OperatorConsoleDropdown
      JavaScript variable: cyclesAcN
      Items: 1;2;3;50;100;150
      Default value: 2
    OperatorConsoleImage
      JavaScript variable: image5
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doAcN
      Default value: 0
      Caption: Perform AcN wash
    OperatorConsoleStatic Display string: Volume of AcN for wash
    OperatorConsoleStatic Display string: Cycles
    OperatorConsoleCheckbox
      JavaScript variable: doEtOH
      Default value: 0
      Caption: Perform EtOH wash
    OperatorConsoleStatic Display string: Sample on Loc8
    OperatorConsoleTextBox
      JavaScript variable: volEtOH
      Mandatory: 1
      Min. value: 0
      Default value: 100
    OperatorConsoleDropdown
      JavaScript variable: cyclesEtOH
      Items: 1;2;3;50;100;150
      Default value: 2
    OperatorConsoleImage
      JavaScript variable: image6
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleStatic Display string: Volume of EtOH for wash
    OperatorConsoleStatic Display string: Cycles
    OperatorConsoleStatic Display string: Sample on Loc8
    OperatorConsoleImage
      JavaScript variable: image7
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greyball.png
    OperatorConsoleCheckbox
      JavaScript variable: doABCTrypsin
      Default value: 0
      Caption: Perform ABC + trypsin resuspension
    OperatorConsoleStatic Display string: Volume of ABC
    OperatorConsoleTextBox
      JavaScript variable: volABC
      Mandatory: 1
      Min. value: 0
      Default value: 35
      Value: 45
    OperatorConsoleStatic Display string: Sample on Loc9
    OperatorConsoleStatic Display string: Volume of Trypsin
    OperatorConsoleTextBox
      JavaScript variable: volTrypsin
      Mandatory: 1
      Min. value: 0
      Default value: 5
    OperatorConsoleStatic Display string: Temp
    OperatorConsoleTextBox
      JavaScript variable: tempABC
      Mandatory: 1
      Default value: 37
    OperatorConsoleCheckbox
      JavaScript variable: offTempABC
      Default value: 0
      Caption: off
      Value: 1
    OperatorConsoleStatic Display string: Time (h)
    OperatorConsoleTextBox
      JavaScript variable: timeABC
      Mandatory: 1
      Default value: 16
    OperatorConsoleStatic Display string: Post-digestion
    OperatorConsoleImage
      JavaScript variable: image8
      Value: C:\VWorks Workspace\SP3Hyx\Forms\greenball.png
    OperatorConsoleCheckbox
      JavaScript variable: doAcidificationRecovery
      Default value: 0
      Caption: Perform acidification and recovery
    OperatorConsoleStatic Display string: Volume of TFA
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)

        open(scriptsPath + "alert.js")

        if ( stockTFA <= 0 || stockTFA > 50 || stockTFA <= finalPercTFA ) {
           formInfo = "Error in input TFA concs. Can't calculate"
           alert()
        }
        else {
           volTFA = Math.round( 10*finalPercTFA * (volABC + volTrypsin) / (stockTFA - finalPercTFA))/10
        }
      Caption: Calculate TFA vol
    OperatorConsoleTextBox
      JavaScript variable: volTFA
      Mandatory: 1
      Min. value: 0
      Default value: 5
      Value: 5.6
    OperatorConsoleStatic Display string: Stock %
    OperatorConsoleTextBox
      JavaScript variable: stockTFA
      Min. value: 1
      Max. value: 100
      Default value: 20
      Value: 10
    OperatorConsoleStatic Display string: Final %
    OperatorConsoleDroplist
      JavaScript variable: finalPercTFA
      Items: 0.5;1;1.5;2
      Default value: 1
    OperatorConsoleStatic Display string: Sample on Loc9
    OperatorConsoleStatic Display string: Volume of sample to transfer
    OperatorConsoleTextBox
      JavaScript variable: volSampTransf
      Default value: 45
      Value: 50
    OperatorConsoleStatic Display string: Volume of TFA 1%
    OperatorConsoleTextBox
      JavaScript variable: volTFA1
      Default value: 100
      Value: 50
    OperatorConsoleStatic Display string: Time (min)
    OperatorConsoleTextBox
      JavaScript variable: timeTFA
      Default value: 2
      Value: 10
    ResetDataEntryValues Caption: Default values
    SaveDataEntryValues Caption: Save values
    OperatorConsoleStatic Display string: Vol to transfer after wash
    OperatorConsoleTextBox
      JavaScript variable: volSampTransf2
      Default value: 100
      Value: 45
    OperatorConsoleButton
      JavaScript variable: volumesCalculatedOK
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formVolFuncs.js")
        open(scriptsPath + "alert.js")

        volumesCalculatedOK = formCalcVols()
        if (volumesCalculatedOK) {
           formInfo = "No errors found in volumes with current settings"
        }
        else {
           alert()
        }

        print("volumesCalculatedOK = " + volumesCalculatedOK)
      Caption: Calculate volumes
    OperatorConsoleStatic Display string: Keep samples at 4 deg?
    OperatorConsoleCheckbox
      JavaScript variable: doKeepCold
      Default value: 0
  OperatorConsoleGroup
    Group name: Processes
    OperatorConsoleStatic Display string: process in progress
    OperatorConsoleStatic Display string: process complete
    OperatorConsoleStatic Display string: process not started
  OperatorConsoleGroup
    Group name: Tips
    OperatorConsoleStatic Display string: Clean tips (C)
    OperatorConsoleStatic Display string: Empty column (E)
    OperatorConsoleStatic Display string: Used tips (U)
  OperatorConsoleStatic Display string: Empty
  OperatorConsoleStatic Display string: 250 uL tips (see below for more)
  OperatorConsoleStatic Display string: 250 uL tips (full box - see below)
  OperatorConsoleStatic
    JavaScript variable: layoutLoc4
    Value: Heating Plate
  OperatorConsoleStatic
    JavaScript variable: layoutLoc5
    Value: Supernatant Collection
  OperatorConsoleStatic Display string: Reagents
  OperatorConsoleStatic Display string: Waste
  OperatorConsoleStatic
    Text: Magnet
    JavaScript variable: layoutLoc8
    Value: Sample Plate
  OperatorConsoleStatic
    JavaScript variable: layoutLoc9
    Default value: Sample Plate
    Value: Empty
  OperatorConsoleTextBox
    JavaScript variable: formInfo
    Read only: 1
    Default value: SP3 protocol
    Value: Starting C:/VWorks Workspace/SP3Hyx/Protocols/SP3Hyx_96LT_v_0.3.pro
  OperatorConsoleButton
    Script:
      // set head and version
      protocolVersion = "0.4"
      formHeadType = "96LT"

      print("formFilePath = " + formFilePath)
      // find the last-but-one slash in the formFilePath
      rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
      scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
      protocolPath = formFilePath.slice(0,rootSlashIndex) + "/Protocols/"

      // Removed 1.0RC -- there is not form name anymore in formFilePath, only path.
      //formName = formFilePath.substring(formFilePath.lastIndexOf("/")+1)

      // building formName from the parameters above
      formName = "SP3Hyx_v_" + protocolVersion +"_"+formHeadType+".VWForm"
      print("formName = " + formName)

      print("scriptsPath = " + scriptsPath)

      open(scriptsPath + "alert.js")
      open(scriptsPath + "beadsPlateColsCheck.js")

      // labware data retrieval just in case
      open(scriptsPath + "getPlateData.js")
      print("labwareDataRetrievedOK = " + labwareDataRetrievedOK)

      // run this again just in case
      open(scriptsPath + "formVolFuncs.js")
      volumesCalculatedOK = formCalcVols()
      print("volumesCalculatedOK = " + volumesCalculatedOK)

      // if this variables does not exist, set it to false
      labwareDataRetrievedOK = labwareDataRetrievedOK || false

      if (!volumesCalculatedOK) {
         formInfo = "Errors found when calculating volumes. Can't proceed."
         alert()
      }
      else if (!labwareDataRetrievedOK) {
         formInfo = "Error found when retrieving labware data. Can't proceed."
         alert()
      }
      else if (!beadsPlateColsCheck()) {
         formInfo = "Duplicate columns in bead plate. Can't proceed."
         alert()
      }
      else if (! (statusColsString = statusColsString || false)) {
         formInfo = "Tips status not set. Can't proceed."
         alert()
      }
      else {
         protFilePath = protocolPath + "SP3Hyx_"+formHeadType+"_v_"+protocolVersion+".pro"
         formInfo = "Starting " + protFilePath
         tipsStatusChangeEnabled = false
         runset.clear()
         runset.appendProtocolFileToRunset(protFilePath, 1, "", formName)
         print("Running " + protFilePath + " using form " + formName)
      }
    Caption: Check values and Run SP3
  PauseResume Caption: Pause protocol
  ToggleFullScreen Caption: Full screen
  OperatorConsoleCheckbox
    JavaScript variable: testMode
    Default value: 0
    Caption: Test mode
  OperatorConsoleStatic Display string: Form root path:
  OperatorConsoleTextBox
    JavaScript variable: formFilePath
    Read only: 1
    Default value: C:/VWorks Workspace/SP3Hyx/Forms/SP3Hyx_v_0.3_96LT.VWForm
  OperatorConsoleGroup
    Group name: Tip box location 2
    OperatorConsoleImage
      JavaScript variable: iCol1
      Value: C:/VWorks Workspace/SP3Hyx/Forms/greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol2
      Value: C:/VWorks Workspace/SP3Hyx/Forms/greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol3
      Value: C:/VWorks Workspace/SP3Hyx/Forms/greenball.png
    OperatorConsoleImage
      JavaScript variable: iCol4
      Value: C:/VWorks Workspace/SP3Hyx/Forms/yellowball.png
    OperatorConsoleImage
      JavaScript variable: iCol5
      Value: C:/VWorks Workspace/SP3Hyx/Forms/yellowball.png
    OperatorConsoleImage
      JavaScript variable: iCol6
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol7
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol8
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol9
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol10
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol11
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleImage
      JavaScript variable: iCol12
      Value: C:/VWorks Workspace/SP3Hyx/Forms/redball.png
    OperatorConsoleDroplist
      JavaScript variable: sCol1
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol2
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol3
      Items: C;E;U;
      Default value: C
    OperatorConsoleDroplist
      JavaScript variable: sCol4
      Items: C;E;U;
      Default value: C
      Value: E
    OperatorConsoleDroplist
      JavaScript variable: sCol5
      Items: C;E;U;
      Default value: C
      Value: E
    OperatorConsoleDroplist
      JavaScript variable: sCol6
      Items: C;E;U;
      Default value: C
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol7
      Items: C;E;U;
      Default value: C
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol8
      Items: C;E;U;
      Default value: C
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol9
      Items: C;E;U;
      Default value: C
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol10
      Items: C;E;U;
      Default value: C
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol11
      Items: C;E;U;
      Default value: E
      Value: U
    OperatorConsoleDroplist
      JavaScript variable: sCol12
      Items: C;E;U;
      Default value: E
      Value: U
    OperatorConsoleStatic Display string: Enable tips status change
    OperatorConsoleCheckbox
      JavaScript variable: tipsStatusChangeEnabled
      Default value: 0
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = "C,C,C,C,C,C,C,C,C,C,E,E"
           colsFormUpdate2()
        }
        else {
           formInfo = "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Set default
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = [sCol1,sCol2,sCol3,sCol4,sCol5,sCol6,sCol7,sCol8,sCol9,sCol10,sCol11,sCol12].join(",")
           colsFormUpdate2()
        }
        else {
           formInfo = "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Store status
    OperatorConsoleButton
      JavaScript variable: statusColsString
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "formTipsFuncs.js")
        open(scriptsPath + "alert.js")

        // this comes from the protocol
        // if it does not exist it will be false
        tipsStatusChangeEnabled = tipsStatusChangeEnabled || false

        // proceed only if allowed by protocol
        if (tipsStatusChangeEnabled) {
           statusColsString = "E,E,E,E,E,E,E,E,E,E,E,E"
           colsFormUpdate2()
        }
        else {
           formInfo =  "Please enable tips status change first!"
           alert()
        }

        print(statusColsString)
      Caption: Reset all
    OperatorConsoleStatic Display string: 10 cols clean 2 cols empty
    OperatorConsoleStatic Display string: All empty
  OperatorConsoleGroup
    Group name: Reagents plate location 6 (per col)
    OperatorConsoleStatic Display string: Col 1
    OperatorConsoleTextBox
      JavaScript variable: reagVolEtOH1
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of EtOH
    OperatorConsoleStatic Display string: Col 2
    OperatorConsoleTextBox
      JavaScript variable: reagVolEtOH2
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of EtOH
    OperatorConsoleStatic Display string: Col 3
    OperatorConsoleTextBox
      JavaScript variable: reagVolAcN
      Read only: 1
      Value: 4408
    OperatorConsoleStatic Display string: uL of AcN
    OperatorConsoleStatic Display string: Col 4
    OperatorConsoleTextBox
      JavaScript variable: reagVolABC
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of ABC
    OperatorConsoleStatic Display string: Col 5
    OperatorConsoleTextBox
      JavaScript variable: reagVolTFA
      Value: Empty
    OperatorConsoleStatic Display string: uL of TFA
    OperatorConsoleStatic Display string: Col 6
    OperatorConsoleTextBox
      JavaScript variable: reagVolTFA1
      Value: Empty
    OperatorConsoleStatic Display string: uL of 1% TFA
  OperatorConsoleGroup
    Group name: Beads plate location 5 (per well)
    OperatorConsoleStatic Display string: Column
    OperatorConsoleDroplist
      JavaScript variable: colReduction
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 1
    OperatorConsoleTextBox
      JavaScript variable: reagVolReduction
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of reductant
    OperatorConsoleDroplist
      JavaScript variable: colAlkylation
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 2
    OperatorConsoleTextBox
      JavaScript variable: reagVolAlkylation
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of alkylant
    OperatorConsoleDroplist
      JavaScript variable: colBeads
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 3
    OperatorConsoleTextBox
      JavaScript variable: reagVolBeads
      Read only: 1
      Value: 23
    OperatorConsoleStatic Display string: uL of beads solution
    OperatorConsoleDroplist
      JavaScript variable: colTrypsin
      Items: 1;2;3;4;5;6;7;8;9;10;11;12;
      Default value: 4
    OperatorConsoleTextBox
      JavaScript variable: reagVolTrypsin
      Read only: 1
      Value: Empty
    OperatorConsoleStatic Display string: uL of trypsin
  OperatorConsoleGroup
    Group name: Load / Save method
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = deleteMethod(rootPath,myMethod,confirmDelete)
        formInfo = tmp.info
        if (!tmp.status) alert()

        // resetting confirmDelete
        confirmDelete = false
      Caption: Delete method
    OperatorConsoleCheckbox
      JavaScript variable: confirmDelete
      Default value: 0
    OperatorConsoleDroplist
      JavaScript variable: myMethod
      Items: =methodsList
      Value: 20210720 Test v0.1.js
      Item selections variable: 20210720 Test v0.1.js;20210721 MEFs 20ug-50ug -- post-digestion.js;20210721 MEFs 20ug-50ug .js;SG_20220928_VPS35digest.js;
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        methodsList = listMethods(rootPath)
        print("methodsList = " + methodsList)
      Caption: List methods
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = loadMethod(rootPath,myMethod)
        formInfo = tmp.info
        if (!tmp.status) alert()

        // retrieve the parameters for the labware set in the method
        open(scriptsPath + "plateInfo.js")
        open(scriptsPath + "getPlateData.js")

        // now check the volumes against the imported parameters
        open(scriptsPath + "formVolFuncs.js")
        volumesCalculatedOK = formCalcVols()
        if (volumesCalculatedOK) {
           formInfo = "No errors found in volumes with current settings"
        }
        else {
           alert()
        }

        // now set the tips selector into the dots
        // and create the status string for the tips
        // open(scriptsPath + "formTipsFuncs.js")
        // tipsStatusChangeEnabled = true
        // statusColsString = [sCol1,sCol2,sCol3,sCol4,sCol5,sCol6,sCol7,sCol8,sCol9,sCol10,sCol11,sCol12].join(",")
        // colsFormUpdate2()
        // tipsStatusChangeEnabled = false
      Caption: Load method
    OperatorConsoleButton
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        rootPath =  formFilePath.slice(0,rootSlashIndex)
        scriptsPath = rootPath + "/Scripts/"

        print("scriptsPath = " + scriptsPath)
        open(scriptsPath + "methodsManager.js")
        open(scriptsPath + "alert.js")

        tmp = saveMethod(rootPath,myMethod2,overwriteMethod)
        formInfo = tmp.info
        if (!tmp.status) alert()
      Caption: Save method
    OperatorConsoleTextBox JavaScript variable: myMethod2
    OperatorConsoleCheckbox
      JavaScript variable: overwriteMethod
      Default value: 0
      Caption: Overwrite method
  OperatorConsoleGroup
    Group name: Labware
    OperatorConsoleStatic Display string: labware DB max vol (uL)
    OperatorConsoleStatic Display string: vol refers to
    OperatorConsoleStatic Display string: max volume per well (uL)
    OperatorConsoleStatic Display string: Sample Labware
    OperatorConsoleDroplist
      JavaScript variable: sampleLabware
      Items: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: sampleMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: sampleMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: sampleMaxVol
      Read only: 1
      Value: 210
    OperatorConsoleStatic Display string: Beads Plate Labware
    OperatorConsoleDroplist
      JavaScript variable: beadsLabware
      Items: 96 SuperPlate PCR Plate AB2800;96 Eppendorf 30129300, PCR, Full Skirt, PolyPro;96 Sarstedt Protein Low Bind PCR Plate, low profile, skirted;
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: beadsMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: beadsMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: beadsMaxVol
      Read only: 1
      Value: 210
    OperatorConsoleStatic Display string: Waste Labware
    OperatorConsoleDroplist
      JavaScript variable: wasteLabware
      Items: 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);;12 Column Reservoir (SP3 waste);
      Default value: 96 Eppendorf 2ml assay block
      Value: 96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom
      Item selections variable: 96 Eppendorf 2ml assay block;96 AbGene 1127, 1mL Deep Well, Square Well, Round Bottom;Reservoir 6 cols Agilent 201284-100 (SP3 waste);12 Column Reservoir (SP3 waste);
    OperatorConsoleStatic Display string: Tip Touch:
    OperatorConsoleDroplist
      JavaScript variable: wasteTTForm
      Items: S/N;W/E
      Default value: W/E
    OperatorConsoleTextBox
      JavaScript variable: wasteMaxVolDB
      Read only: 1
      Value: 1000
    OperatorConsoleDroplist
      JavaScript variable: wasteMaxVolRef
      Items: well;column
      Read only: 1
      Value: well
    OperatorConsoleTextBox
      JavaScript variable: wasteMaxVol
      Read only: 1
      Value: 1000
    OperatorConsoleStatic Display string: Reagents Labware
    OperatorConsoleDroplist
      JavaScript variable: reagentsLabware
      Items: Reservoir 6 cols Agilent 201284-100 (SP3 reagents);
      Read only: 1
      Default value: Reservoir 6 cols Agilent 201284-100 (SP3 reagents)
    OperatorConsoleTextBox
      JavaScript variable: reagentsMaxVolDB
      Read only: 1
      Value: 47000
    OperatorConsoleDroplist
      JavaScript variable: reagentsMaxVolRef
      Items: column
      Read only: 1
    OperatorConsoleTextBox
      JavaScript variable: reagentsMaxVol
      Read only: 1
      Value: 5875
    OperatorConsoleStatic Display string: Collection Plate Labware
    OperatorConsoleDroplist
      JavaScript variable: destinationLabware
      Items: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
      Default value: 96 Eppendorf 30129300, PCR, Full Skirt, PolyPro
    OperatorConsoleTextBox
      JavaScript variable: destinationMaxVolDB
      Read only: 1
      Value: 210
    OperatorConsoleDroplist
      JavaScript variable: destinationMaxVolRef
      Items: well
      Read only: 1
    OperatorConsoleTextBox
      JavaScript variable: destinationMaxVol
      Value: 210
    OperatorConsoleStatic Display string: Tips on location 2
    OperatorConsoleRadioButton
      JavaScript variable: tips3unfiltered
      Default value: 1
      Caption: Unfiltered
      Group ID: tips3box
    OperatorConsoleRadioButton
      JavaScript variable: tips3filtered
      Default value: 0
      Caption: Filtered
      Group ID: tips3box
    OperatorConsoleButton
      JavaScript variable: labwareDataRetrievedOK
      Script:
        print("formFilePath = " + formFilePath)
        // find the last-but-one slash in the formFilePath
        rootSlashIndex = formFilePath.lastIndexOf("/", formFilePath.lastIndexOf("/")-1)
        scriptsPath = formFilePath.slice(0,rootSlashIndex) + "/Scripts/"
        print("scriptsPath = " + scriptsPath)

        open(scriptsPath + "plateInfo.js")
        open(scriptsPath + "getPlateData.js")

        print("labwareDataRetrievedOK = " + labwareDataRetrievedOK)
      Caption: Retrieve data from the labware DB and calculate max volume
    OperatorConsoleStatic Display string: Tips on location 3
    OperatorConsoleRadioButton
      JavaScript variable: tips6unfiltered
      Default value: 1
      Caption: Unfiltered
      Group ID: tips6box
    OperatorConsoleRadioButton
      JavaScript variable: tips6filtered
      Default value: 0
      Caption: Filtered
      Group ID: tips6box
